PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = death-iat
  keyboardBackend = ioHub
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Routines
  Routine instr_2
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    TextboxComponent instr_2_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.03
      size = (1.5, 1.5)
      startVal [time (s)] = 0.5
      text = $"You will be asked to sort words into the categories of DEATH, LIFE, ME, and NOT ME.\n\nThe words in each category are shown below.\n\nDEATH: Suicide, Die, Dead, Lifeless, Deceased\n\nLIFE: Alive, Live, Thrive, Survive, Breathing\n\nME: Myself, My, Mine, I, Self\n\nNOT ME: Them, They, Theirs, Their, Other\n\nWhen the word in the center corresponds to one of the categories on the left, you will use the E key.\n\nWhen the word in the center corresponds to one of the categories on the right, you will use the I key.\n\nSort the words as quickly as possible while making as few mistakes as possible.\n\nPress Enter to start the task."
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    KeyboardComponent instr_2_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine trial
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  Routine block_intro
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    TextboxComponent block_intro_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (1.5, 1.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_instructions
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    TextboxComponent cat_left_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (-0.7, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $cat_l_text
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    TextboxComponent cat_right_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0.7, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $cat_r_text
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  Routine instr_1
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    TextboxComponent instr_1_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.03
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      text = $"In this task, you will see words appear one at a time in the middle of the screen.\n\nSort those words into groups according to the labels that appear in the top right and left corners of the screen.\n\nPress the left E key if you see a word belonging in the group on the left.\n\nPress the right I key if you see a word belonging to the group on the right.\n\nPlease respond as quickly and as accurately as you can.\n\nPay close attention to the group labels on the left and the right, since they will change from block to block.\n\nOn the next screen, you will see the words you will be sorting in this task.\n\nPlease ask the experimenter now if you have any questions.\n\nPress Enter to continue."
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    KeyboardComponent instr_1_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr_1
  Routine instr_2
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks1.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1), ('num_trials', 20), ('func', 'practice'), ('cat_l_key', 'life'), ('cat_r_key', 'death'), ('cat_l_text', 'LIFE'), ('cat_r_text', 'DEATH'), ('block_instructions', 'Put your index fingers on the E and I keys of your keyboard.\n\nWords representing the categories at the top will appear one-by-one in the middle of the screen. When the word belongs to a category on the left, press the E key; when the word belongs to a category on the right, press the I key. Words belong to only on category. If you make an error, a red X will appear.\n\nGO AS FAST YOU CAN, WHILE MAKING AS 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,
      OrderedDict([('block', 2), ('num_trials', 20), ('func', 'practice'), ('cat_l_key', 'me'), ('cat_r_key', 'notme'), ('cat_l_text', 'ME'), ('cat_r_text', 'NOT ME'), ('block_instructions', None)]),
      OrderedDict([('block', 3), ('num_trials', 20), ('func', 'test'), ('cat_l_key', 'life,me'), ('cat_r_key', 'death,notme'), ('cat_l_text', 'LIFE\nor\nME'), ('cat_r_text', 'DEATH\nor\nNOT ME'), ('block_instructions', None)]),
      OrderedDict([('block', 4), ('num_trials', 40), ('func', 'test'), ('cat_l_key', 'life,me'), ('cat_r_key', 'death,notme'), ('cat_l_text', 'LIFE\nor\nME'), ('cat_r_text', 'DEATH\nor\nNOT ME'), ('block_instructions', None)]),
      OrderedDict([('block', 5), ('num_trials', 20), ('func', 'practice'), ('cat_l_key', 'death'), ('cat_r_key', 'life'), ('cat_l_text', 'DEATH'), ('cat_r_text', 'LIFE'), ('block_instructions', None)])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
    Routine block_intro
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = num_trials
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
